PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = 270300_Mental_Rotation
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Routines
  Routine instructions_2D
    ImageComponent instr_2D
      image = Stimuli_2D\instructions\instructions.png
      size = (584, 441)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent instr_2D_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI_Fixation_2D
    CodeComponent fix_point_2D_code
      Code Type = Auto->JS
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      Begin Routine:
        # Logging der Pfade der verwendeten Bilddateien
        # Diese Variablen werden in die Experimental-csv-Daatei geschrieben und
        # als Pfad für die image-Stimuli verwendet
        img_correct_path = 'Stimuli_2d/correct' + str(img_index[trials_2D.thisN]) + '.png' # Pfad des korrekten 2D-Bildes
        img_wrong_path = 'Stimuli_2d/wrong' + str(img_index[trials_2D.thisN]) + '.png' # Pfad des falschen 2D-Bildes
        img_target_path = 'Stimuli_2d/target' + str(img_index[trials_2D.thisN]) + '.png' # Pfad des Target-Bildes
    PolygonComponent fix_point_2D
      durationEstim = 1
      fillColor = white
      shape = circle
      size = (10, 10)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    StaticComponent fix_point_2D_ISI
      durationEstim = 1
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine trial_2D
    CodeComponent trial_2D_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Importieren der relevanten / benötigten Libraries
        import random # für Zugriff auf die random- und shuffle-Methode

        # Erstellen der Liste mit den Bild-Indices
        # Da die Bilder von 1-15 durchnummeriert sind (z.B. correct1.png), wird eine Liste mit
        # entsprechenden Integern angelegt
        img_index = [1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]

        # Randomisierung der Liste mit den Bild-Indices
        # wenn als Pfad zur Bilddatei $#Stimuli_2D/target' + str(img_index[trials.thisN]) + '.png'
        # verwendet wird, erhält man eine zufällige Reihenfolge der Bilddateien,
        # da die img_index-Liste vorher geshuffelt wurde
        random.shuffle(img_index)

        print(os.path.dirname(os.path.realpath(sys.argv[0])))
      Begin Routine:
        # Festlegen der x-Position der Correct- und
        # Wrong-Stimuli / Bilder
        # x_pos_correct wird bei dem Bildstimulus
        # img_correct, -x_pos_correct bei dem
        # Bildstimulus img_wrong unter Position als x-Koordinate
        # verwendet. Der Wert 250 ist arbiträr gewählt, die
        # Anordnung der Stimuli ähnelt aber der in der
        # Aufgabenstellung vorgegebenen Anordnung.
        if random.random() < 0.5:
            x_pos_correct = -250
        else:
            x_pos_correct = 250
      End Routine:
        # Speichern der x-Koordinaten der Stimuli
        # x_pos_correct = x-Position (pix) der img_correct-Stimuli
        # x_pos_wrong = x-Position (pix) der img_wrong-Stimuli
        thisExp.addData('x_pos_correct', x_pos_correct)
        thisExp.addData('x_pos_wrong', -x_pos_correct)

        # Speichern der verwendeten Bilddateien
        # (in den csv-Dateien kann man anhand der Zahlern
        # der verwendeten Bilder sehen, dass die Stimuli
        # randomisiert präsentiert werden)
        thisExp.addData('img_correct', img_correct_path)
        thisExp.addData('img_wrong', img_wrong_path)
        thisExp.addData('img_target', img_target_path)
    MouseComponent trial_2D_mouse
      clickable = img_correct
      durationEstim = 10
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name, pos
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = routine
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    ImageComponent img_correct
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_2D_ISI] = $img_correct_path
      pos [set every repeat] = (x_pos_correct, -139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent img_target
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_2D_ISI] = $img_target_path
      pos [set every repeat] = (0, 139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent img_wrong
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_2D_ISI] = $img_wrong_path
      pos [set every repeat] = (-x_pos_correct, -139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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  Routine instructions_3D
    TextComponent instr_3D
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.2
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      text:
        Die folgenden Figuren müssen verglichen werden. Überlappen die Figuren durch Drehen vollständig, dann drücken Sie die Pfeiltaste nach OBEN, wenn nicht, drücken Sie die Pfeiltaste nach UNTEN.

        Zum Fortfahren bitte LEERTASTE drücken.
    KeyboardComponent instr_3D_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_2D
  LoopInitiator trials_2D loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine ITI_Fixation_2D
    Routine trial_2D
  LoopTerminator trials_2D
  Routine instructions_3D
